# Setup to help to reproduce IRT time-dependent G-values

################# TOPAS PARAM #################

i:Ts/ShowHistoryCountAtInterval = 50
i:Ts/MaxInterruptedHistories  = So/Demo/NumberOfHistoriesInRun
Ts/NumberOfThreads = 1 # Can increase depending on your machine
b:Ts/ShowCPUTime = "True"

################# MODEL LISTS #################

sv:Ph/Default/Modules = 2 "TsEmDNAPhysics" "TsEmDNAChemistry"
s:Ph/Default/Electron/SetElasticScatteringModel  = "ELSEPA" 
s:Ph/Default/SolvatedElectronThermalizationModel = "Meesungnoen" 

################# CHEMISTRY #################

s:Ch/ChemistryName = "TOPASChemistry"
b:Ch/TOPASChemistry/ChemicalStageTransportActive = "True"
dv:Ch/TOPASChemistry/ChemicalStageTimeStepsHighEdges   = 1 999999 ps
dv:Ch/TOPASChemistry/ChemicalStageTimeStepsResolutions = 1 1e-6 ps
d:Ch/TOPASChemistry/ChemicalStageTimeEnd = 1.00001 ps
b:Ch/TOPASChemistry/TestForContactReactions = "True"

includeFile = depFile1.txt 

################# GEOMETRY #################

d:Ge/World/HLX= 10 cm
d:Ge/World/HLY= 10 cm
d:Ge/World/HLZ= 10 cm
s:Ge/World/Material ="G4_WATER"

d:Ge/Target/HLX= Ge/World/HLX cm 
d:Ge/Target/HLY= Ge/World/HLY cm
d:Ge/Target/HLZ= Ge/World/HLZ cm 
s:Ge/Target/Material = "G4_WATER"
s:Ge/Target/Type     = "TsBox"
s:Ge/Target/Parent   = "World"

################# SOURCE #################

Ge/BeamPosition/TransZ = 0.0 um
Ge/BeamPosition/RotX = 0 deg

So/Demo/BeamPositionDistribution = "None"
So/Demo/BeamEnergySpread = 0
So/Demo/BeamParticle = "e-"
So/Demo/BeamEnergy   = 999.999 keV
i:So/Demo/NumberOfHistoriesInRun = 5000

################# SCORER #################

u:perCent = 0.01 

s:Sc/nbOfMol/Quantity   = "TsIRTGvalue" 
s:Sc/nbOfMol/Component  = "Target"
s:Sc/nbOfMol/OutputType = "ascii"
i:Sc/nbOfMol/OutputBufferSize = 1
d:Sc/nbOfMol/KillPrimaryIfEnergyLossExceeds = So/Demo/BeamEnergy keV * perCent
s:Sc/nbOfMol/IfOutputFileAlreadyExists      = "Overwrite"
b:Sc/nbOfMol/KillPrimaryBasedOnEnergyLoss   = "true"
d:Sc/nbOfMol/KillPrimaryBasedOnTrackLength  = 100 km 
d:Sc/nbOfMol/AbortEventIfPrimaryEnergyLossExceeds = 1.001 * Sc/nbOfMol/KillPrimaryIfEnergyLossExceeds keV
#d:Sc/nbOfMol/CutOffTime = 1 ps
d:Sc/nbOfMol/TimeLower  = 1.0 ps
d:Sc/nbOfMol/TimeUpper  = 1e6 ps 
i:Sc/nbOfMol/TimeBins   = 100
#b:Sc/nbOfMol/UseScaledProbabilityForSpinBehavior = "True"
b:Sc/nbOfMol/ReportDeltaGValues = "False"
s:Sc/nbOfMol/OutputFile = "Gvalue"

##########################################

Ts/Seed = 8
