## 
d:theNitrateConcentration = 1e-3 M
d:theBromideConcentration = 1e-3 M

b:Ch/TOPASChemistry/BackgroundReaction/SolvatedElectron/NO3m/Active = "True"
d:Ch/TOPASChemistry/BackgroundReaction/SolvatedElectron/NO3m/Concentration = theNitrateConcentration M 
b:Ch/TOPASChemistry/BackgroundReaction/Hydrogen/NO3m/Active = "True"
d:Ch/TOPASChemistry/BackgroundReaction/Hydrogen/NO3m/Concentration = theNitrateConcentration M

b:Ch/TOPASChemistry/BackgroundReaction/Hydroxyl/Br/Active = "True"
d:Ch/TOPASChemistry/BackgroundReaction/Hydroxyl/Br/Concentration = theBromideConcentration M 

b:Ch/TOPASChemistry/BackgroundReaction/Hydrogen/HCO2m/Active = "True"
d:Ch/TOPASChemistry/BackgroundReaction/Hydrogen/HCO2m/Concentration = 1e-0 M
b:Ch/TOPASChemistry/BackgroundReaction/Hydroxyl/HCO2m/Active = "True"
d:Ch/TOPASChemistry/BackgroundReaction/Hydroxyl/HCO2m/Concentration = 1e-0 M

s:Sc/nbOfMol/OutputFile = "HCO2m_1e-0_M_Br_1e-3_M_NO3m_1e-3_M"


i:Ts/Verbosity = 0 
################# CHEMISTRY
sv:Ph/Default/Modules = 2 "TsEmDNAPhysics" "TsEmDNAChemistry"
s:Ph/Default/Electron/SetElasticScatteringModel = "ELSEPA" 
s:Ph/Default/SolvatedElectronThermalizationModel = "Meesungnoen" 

includeFile = TOPASDefaultReactionsLaVerne.txt ScavengerReactions.txt

s:Ch/ChemistryName = "TOPASChemistry"
b:Ch/TOPASChemistry/ChemicalStageTransportActive = "True"
dv:Ch/TOPASChemistry/AddTimeStepHighEdge   = 1 999999 ps
dv:Ch/TOPASChemistry/AddTimeStepResolution = 1 1e-6 ps
d:Ch/TOPASChemistry/ChemicalStageTimeEnd = 1.00001 ps
b:Ch/TOPASChemistry/TestForContactReactions = "True"

################# CHEMISTRY

Ge/World/HLX= 1 km 
Ge/World/HLY= 1 km 
Ge/World/HLZ= 1 km 
Ge/World/Material ="G4_WATER"

d:Ge/sWorld/HLX= 1 km 
d:Ge/sWorld/HLY= 1 km 
d:Ge/sWorld/HLZ= 1 km 
s:Ge/sWorld/Material ="G4_WATER"
s:Ge/sWorld/Type = "TsBox"
s:Ge/sWorld/Parent = "World"

Ge/BeamPosition/TransZ = -0.0 * Ge/World/HLZ um
Ge/BeamPosition/RotX = 0 deg

So/Demo/BeamPositionDistribution = "None"
So/Demo/BeamEnergySpread = 0
So/Demo/BeamParticle = "e-"
So/Demo/BeamEnergy = 999.999 keV 

u:perCent = 0.01 

s:Sc/nbOfMol/Quantity = "TsIRTGvalue" #"IRT"
s:Sc/nbOfMol/Component = "sWorld"
s:Sc/nbOfMol/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/nbOfMol/OutputType = "ascii"
d:Sc/nbOfMol/KillPrimaryIfEnergyLossExceeds = So/Demo/BeamEnergy keV * perCent
d:Sc/nbOfMol/AbortEventIfPrimaryEnergyLossExceeds = 1.01 * Sc/nbOfMol/KillPrimaryIfEnergyLossExceeds keV
b:Sc/nbOfMol/KillPrimaryBasedOnEnergyLoss = "true"
d:Sc/nbOfMol/KillPrimaryBasedOnTrackLength = 100 km 
i:Sc/nbOfMol/OutputBufferSize = 1
d:Sc/nbOfMol/CutOffTime = 1 ps
d:Sc/nbOfMol/TimeLower = 1.0 ps
d:Sc/nbOfMol/TimeUpper = 1e9 ps 
i:Sc/nbOfMol/TimeBins  = 100
b:Sc/nbOfMol/EnableHighTimeScavengers = "True"
sv:Sc/nbOfMol/ReportMoleculesNamed = 8 "OH^0" "e_aq^-1" "H^0" "H2O2^0" "H_2^0" "HCO2m" "CO2m" "NO32m" 
i:So/Demo/NumberOfHistoriesInRun = 3000
i:Ts/ShowHistoryCountAtInterval = 300

i:Ts/MaxInterruptedHistories  = So/Demo/NumberOfHistoriesInRun

Ts/NumberOfThreads = 10
b:Ts/ShowCPUTime = "True"

Ts/Seed = 5074
